PsychoPy2experiment version="2026.1.0"
Settings
  runMode = 1
  Show info dlg = False
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  winBackend = .pygletbackend.PygletBackend
  Screen = 0
  Full-screen window = False
  Window size (pixels) = [1024,768]
  Units = height
  measureFrameRate = False
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = Pyglet
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Routines
  Routine trial
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    PolygonComponent fixation
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      fillColor = white
      size = 10,10
      units = pix
      shape = circle
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    PolygonComponent target
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      fillColor = white
      size = 100,100
      units = pix
      shape = rectangle
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    KeyboardComponent key_resp
      startVal [time (s)] = 0.5
      forceEndRoutine = True
      allowedKeys = y
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  Routine instructionroutine
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    TextComponent text
      startVal [time (s)] = 0
      letterHeight = 0.05
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      text:
        Your task is to press y when u see a square
        press space when u r ready
    KeyboardComponent keyresp
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = ['space']
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  Routine thankyou
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    TextComponent text2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = thankyou
      letterHeight = 0.05
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Flow
  Routine instructionroutine
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
    conditions = []
    endPoints = [0,1]
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    Routine trial
  LoopTerminator trials
  Routine thankyou
